PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = moral_judgements_fMRI
  keyboardBackend = ioHub
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Routines
  Routine welcome_screen
    TextComponent welcome_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in this study. It has three parts. Part one begins soon.
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    KeyboardComponent welcome_key
      allowedKeys = "t"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank_500
    TextComponent text_blank_500
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine vignette_stimulus
    TextComponent vignette
      letterHeight = 0.04
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $vignette_text
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    SliderComponent vignette_slider
      forceEndRoutine = False
      granularity = 1
      labels = ("1\nNot Morally Wrong", "4\nExtremely Morally Wrong")
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4)
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    CodeComponent vignette_response
      Code Type = Auto->JS
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      Begin Routine:
        if vignette_slider.markerPos is None:
            # sets to our first position (or a random number?)
            # and makes marker visible
            vignette_slider.markerPos = 1
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'b' in keys:
                vignette_slider.markerPos -= 1
            elif 'g' in keys:
                vignette_slider.markerPos += 1

        vignette_slider.rating = vignette_slider.markerPos
    KeyboardComponent vignette_keys
      allowedKeys = 'b', 'g'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      store = all keys
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  Routine fixation_cross_short
    PolygonComponent cross_short
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine vignette_break
    CodeComponent vignette_break_code
      Code Type = Auto->JS
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      Each Frame:
        if vignette_trials.thisN == 0 or vignette_trials.thisN == 12 or (vignette_trials.thisN + 1) % 4 != 0:
            continueRoutine = False
    TextComponent vignette_break_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Short Break. When you are ready to continue, indicate that with pressing any key
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    KeyboardComponent vignette_break_key
      allowedKeys = "t"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = nothing
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  Routine vignette_blank
    CodeComponent choice_duration
      Code Type = Auto->JS
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      Begin Routine:
        duration_vignette_blank= np.random.choice([2,4,6])
    TextComponent vignette_blank_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_vignette_blank
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  Routine smid_rating
    TextComponent smid_text
      letterHeight = 0.04
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = The image portrayed something...
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    SliderComponent smid_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ("1\nMoral", 2, 3, 4, "5\nImmoral")
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent smid_code
      Code Type = Auto->JS
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      Begin Routine:
        if smid_slider.markerPos is None:
            # sets to our first position (or a random number?)
            # and makes marker visible
            smid_slider.markerPos = 2
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'b' in keys:
                smid_slider.markerPos -= 1
            elif 'g' in keys:
                smid_slider.markerPos += 1

        smid_slider.rating = smid_slider.markerPos
    KeyboardComponent smid_key
      allowedKeys = 'b', 'g'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = all keys
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  Routine vignette_instructions
    CodeComponent lang_choice
      Code Type = Auto->JS
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      Begin Experiment:
        condition = np.random.choice(('dutch','english'))
    TextComponent vignette_instructions_1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.04
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"You will see a series of sentences in " +condition +".\nImagine yourself as a witness to the actions in each one.\nPlease rate how MORALLY WRONG each action was, using a 4-point scale ranging from: "
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    SliderComponent vignette_example_slider
      forceEndRoutine = False
      granularity = 0
      initVal = 1
      labels = ("1\nNot Morally Wrong", "4\nExtremely Morally Wrong")
      letterHeight = 0.03
      pos = (0, -.05)
      readOnly = True
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4)
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    KeyboardComponent vignette_instructions_key
      allowedKeys = 't'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent vignette_instructions_2
      letterHeight = 0.035
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please use your right hand for the ratings. Your index finger equals one, your pinky the four.
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  Routine smid_cross
    CodeComponent smid_cross_code
      Code Type = Auto->JS
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      Begin Routine:
        duration_smid_cross = np.random.choice([2,4])
    PolygonComponent smid_cross_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_smid_cross
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  Routine smid_instructions
    TextComponent smid_instructions_text
      letterHeight = 0.05
      pos = (0, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Thank you for answering the questions on the vignettes. The first part of the study is done.

        Next, we will present images. Please indicate whether these are moral, neutral or immoral.
    SliderComponent smid_instructions_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ("1\nMoral", 2, 3, 4, "5\nImmoral")
      letterHeight = 0.03
      pos = (0, -.15)
      readOnly = True
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent smid_instructions_key
      allowedKeys = "t"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = nothing
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  Routine clip_instructions
    TextComponent clip_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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      text:
        Instructions
  Routine clip_stimulus
    MovieComponent newsclip
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $clip_name
      size = [1280,720]
      startVal [time (s)] = 0.0
      units = pix
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  Routine smid_stimulus
    ImageComponent smid_image
      image [set every repeat] = $smid_name
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine smid_break
    CodeComponent smid_break_code
      Code Type = Auto->JS
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      Each Frame:
        if smid_trials.thisN == 0 or smid_trials.thisN == 12 or (smid_trials.thisN + 1) % 3 != 0:
            continueRoutine = False
    TextComponent smid_break_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Short Break. When you are ready to continue, indicate that with pressing any key
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    KeyboardComponent smid_break_key
      allowedKeys = "t"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = nothing
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  Routine clip_rating
    TextComponent clip_text
      letterHeight = 0.04
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = I would share this clip by posting on social media (Facebook, Twitter, etc.)
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    SliderComponent clip_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ("1\nNot at all", 2, 3, 4, "5\nVeryMuch")
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent clip_code
      Code Type = Auto->JS
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      Begin Routine:
        if clip_slider.markerPos is None:
            # sets to our first position (or a random number?)
            # and makes marker visible
            clip_slider.markerPos = 2
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'b' in keys:
                clip_slider.markerPos -= 1
            elif 'g' in keys:
                clip_slider.markerPos += 1

        clip_slider.rating= clip_slider.markerPos
    KeyboardComponent clip_key
      allowedKeys = 'b', 'g'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = all keys
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Flow
  Routine welcome_screen
  Routine blank_500
  Routine vignette_instructions
  Routine blank_500
  LoopInitiator vignette_trials loopType="TrialHandler"
    Selected rows = $np.random.choice(120,12,replace = False)
    conditionsFile = $"vig_text_"+ condition + ".xlsx"
    loopType = random
    nReps = 1
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    Routine vignette_stimulus
    Routine vignette_blank
    Routine vignette_break
  LoopTerminator vignette_trials
  Routine smid_instructions
  Routine blank_500
  LoopInitiator smid_trials loopType="TrialHandler"
    Selected rows = $np.random.choice(120,12,replace = False)
    conditionsFile = smid_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_id': 0, 'image_name': 'smid/Neutral_Immoral - high arousal4.jpg', 'moral_domain': 'Neutral', 'valence': 'Immoral', 'arousal': 'high arousal', 'image_number': 4},
      {'image_id': 1, 'image_name': 'smid/Purity-Degradation_Moral - low arousal4.jpg', 'moral_domain': 'Purity-Degradation', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 4},
      {'image_id': 2, 'image_name': 'smid/Loyalty-Betrayal_Moral - low arousal1.jpg', 'moral_domain': 'Loyalty-Betrayal', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 1},
      {'image_id': 3, 'image_name': 'smid/Neutral_Moral - low arousal1.jpg', 'moral_domain': 'Neutral', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 1},
      {'image_id': 4, 'image_name': 'smid/Purity-Degradation_Moral - low arousal5.jpg', 'moral_domain': 'Purity-Degradation', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 5},
      {'image_id': 5, 'image_name': 'smid/Neutral_Immoral - high arousal5.jpg', 'moral_domain': 'Neutral', 'valence': 'Immoral', 'arousal': 'high arousal', 'image_number': 5},
      {'image_id': 6, 'image_name': 'smid/Authority-Subversion_Moral - low arousal5.jpg', 'moral_domain': 'Authority-Subversion', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 5},
      {'image_id': 7, 'image_name': 'smid/Loyalty-Betrayal_Moral - low arousal2.jpg', 'moral_domain': 'Loyalty-Betrayal', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 2}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
    Routine smid_cross
    Routine smid_stimulus
    Routine smid_rating
    Routine smid_break
  LoopTerminator smid_trials
  Routine clip_instructions
  Routine blank_500
  LoopInitiator clip_trials loopType="TrialHandler"
    Selected rows = np.random.choice(3,3) + [0, 3, 6]
    conditionsFile = clips_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'clip_id': '1a', 'clip_name': 'newsclips/1a.mp4', 'topic': 'immigration', 'frame': 'fear'},
      {'clip_id': '1b', 'clip_name': 'newsclips/1b.mp4', 'topic': 'immigration', 'frame': 'blame'},
      {'clip_id': '1c', 'clip_name': 'newsclips/1c.mp4', 'topic': 'immigration', 'frame': 'neutral'},
      {'clip_id': '2a', 'clip_name': 'newsclips/2a.mp4', 'topic': 'climate', 'frame': 'fear'},
      {'clip_id': '2b', 'clip_name': 'newsclips/2b.mp4', 'topic': 'climate', 'frame': 'blame'},
      {'clip_id': '2c', 'clip_name': 'newsclips/2c.mp4', 'topic': 'climate', 'frame': 'neutral'},
      {'clip_id': '3a', 'clip_name': 'newsclips/3a.mp4', 'topic': 'healthcare', 'frame': 'fear'},
      {'clip_id': '3b', 'clip_name': 'newsclips/3b.mp4', 'topic': 'healthcare', 'frame': 'blame'},
      {'clip_id': '3c', 'clip_name': 'newsclips/3c.mp4', 'topic': 'healthcare', 'frame': 'neutral'}]
    Routine clip_stimulus
    Routine clip_rating
  LoopTerminator clip_trials
