PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = moral_judgements_fMRI
  keyboardBackend = ioHub
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Routines
  Routine welcome_screen
    TextComponent welcome_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating in this study. It has three parts. Part one begins soon.
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    KeyboardComponent welcome_key
      allowedKeys = "t"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine vignette_stimulus
    TextComponent vignette
      letterHeight = 0.04
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.7
      text [set every repeat] = $dutch_vignette
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    SliderComponent vignette_slider
      forceEndRoutine = False
      granularity = 1
      labels = ("1\nNiet moreel verkeerd", "4\nExtreem moreel verkeerd")
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.7
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4)
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    CodeComponent vignette_response
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'h' in keys:
                vignette_slider.markerPos = 1
            elif 'j' in keys:
                vignette_slider.markerPos = 2
            elif 'k' in keys:
                vignette_slider.markerPos = 3
            elif 'l' in keys:
                vignette_slider.markerPos = 4
    KeyboardComponent vignette_keys
      allowedKeys = 'h', 'j', 'k', 'l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.7
      store = all keys
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  Routine fixation_cross_short
    PolygonComponent cross_short
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine vignette_break
    CodeComponent vignette_break_code
      Code Type = Auto->JS
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      Each Frame:
        if vignette_trials.thisN == 0 or vignette_trials.thisN == 11 or (vignette_trials.thisN + 1) % 4 != 0:
            continueRoutine = False
    TextComponent vignette_break_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 7.7
      text = Wachten om verder te gaan.
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    KeyboardComponent vignette_break_key
      allowedKeys = "t"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 7.7
      store = nothing
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    PolygonComponent vignette_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.7
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  Routine vignette_blank
    CodeComponent choice_duration
      Code Type = Auto->JS
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      Begin Routine:
        duration_vignette_blank= np.random.choice([1.4,3.5,5.6])
    TextComponent vignette_blank_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_vignette_blank
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  Routine smid_rating
    TextComponent smid_text
      letterHeight = 0.04
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.2
      text = Deze afbeelding geeft iets...weer
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    SliderComponent smid_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ("1\nMOREEL", 2, 3, 4, "5\nIMMOREEL")
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.2
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent smid_code
      Code Type = Auto->JS
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      Begin Routine:
        if smid_slider.markerPos is None:
            # sets to our first position (or a random number?)
            # and makes marker visible
            smid_slider.markerPos = 2
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'h' in keys:
                smid_slider.markerPos -= 1
            elif 'j' in keys:
                smid_slider.markerPos += 1

        smid_slider.rating = smid_slider.markerPos
    KeyboardComponent smid_key
      allowedKeys = 'h', 'j'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.2
      store = all keys
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  Routine vignette_instructions
    TextComponent vignette_instructions_1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.04
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"U staat op het punt een reeks zinnen te zien. \nStel u voor dat u getuige bent van de acties in elk ervan.\nBeoordeel hoe MOREEL VERKEERD elke actie was, met behulp van een 4-puntsschaal variërend van: "
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    SliderComponent vignette_example_slider
      forceEndRoutine = False
      granularity = 0
      labels = ("1\nNiet moreel verkeerd", "4\nExtreem moreel verkeerd")
      letterHeight = 0.03
      pos = (0, -.05)
      readOnly = True
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4)
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'h' in keys:
                vignette_example_slider.markerPos = 1
            elif 'j' in keys:
                vignette_example_slider.markerPos = 2
            elif 'k' in keys:
                vignette_example_slider.markerPos = 3
            elif 'l' in keys:
                vignette_example_slider.markerPos = 4
    KeyboardComponent vignette_instructions_key
      allowedKeys = 't'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent vignette_instructions_2
      letterHeight = 0.035
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Gebruik uw rechterhand voor de beoordelingen. Elk van uw vingers is gelijk aan één schaalpunt (wijsvinger = één, middelvinger = twee, ringvinger = drie, pink = vier)

        Probeer het maar eens.
  Routine smid_cross
    PolygonComponent smid_cross_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.1
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  Routine smid_instructions
    TextComponent smid_instructions_text
      letterHeight = 0.035
      pos = (0, .20)
      startVal [time (s)] = 0.0
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      text:
        U staat op het punt een reeks foto’s te zien. Stel u voor dat u getuige bent van de scènes in elk ervan.

        Beoordeel na het bekijken van de afbeelding of het iets MOREEL/LOFWAARDIG - IMMOREEL/VERWIJTBAAR weergeeft, met behulp van een 5-puntsschaal variërend van:
    SliderComponent smid_instructions_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ("1\nMOREEL", 2, 3, 4, "5\nIMMOREEL")
      letterHeight = 0.03
      pos = (0, -.05)
      readOnly = True
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent smid_instructions_key
      allowedKeys = "t"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.03
      pos = (0, -.35)
      startVal [time (s)] = 0.0
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      text:
        Gebruik uw rechterhand voor de beoordelingen. Met de wijsvinger kunt u de schuifregelaar naar links verplaatsen. Met de middelvinger kunt u de schuifregelaar naar rechts verplaatsen.

        Probeer het maar eens.
    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'h' in keys:
                smid_instructions_slider.markerPos -= 1
            elif 'j' in keys:
                smid_instructions_slider.markerPos += 1
  Routine clip_instructions
    TextComponent clip_instructions_text
      letterHeight = 0.05
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Nu ziet u de drie nieuwsfragmenten over verschillende onderwerpen. Geef na het bekijken van elk fragment aan of je het zou delen op sociale media met behulp van een 5-puntsschaal variërend van:
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    SliderComponent clip_instructions_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ("1\nHelemaal niet", 2, 3, 4, "5\nHeel erg")
      letterHeight = 0.03
      pos = (0, -.15)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent clip_instructions_code
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'h' in keys:
                clip_instructions_slider.markerPos -= 1
            elif 'j' in keys:
                clip_instructions_slider.markerPos += 1
    KeyboardComponent key_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine clip_stimulus
    MovieComponent newsclip
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $clip_name
      size = [1280,720]
      startVal [time (s)] = 0.0
      units = pix
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  Routine smid_stimulus
    ImageComponent smid_image
      image [set every repeat] = $smid_name
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.3
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  Routine smid_break
    CodeComponent smid_break_code
      Code Type = Auto->JS
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      Each Frame:
        if smid_trials.thisN == 0 or smid_trials.thisN == 11 or (smid_trials.thisN + 1) % 3 != 0:
            continueRoutine = False
    TextComponent smid_break_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 7.7
      text = Wachten om verder te gaan.
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    KeyboardComponent smid_break_key
      allowedKeys = "t"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 7.7
      store = nothing
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    PolygonComponent smid_break_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.7
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  Routine clip_rating
    TextComponent clip_text
      letterHeight = 0.04
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Ik zou dit fragment delen door deze te plaatsen op sociale media (Facebook, Twitter, etc.)…
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    SliderComponent clip_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ("1\nHelemaal niet", 2, 3, 4, "5\nHeel erg")
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent clip_code
      Code Type = Auto->JS
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      Begin Routine:
        if clip_slider.markerPos is None:
            # sets to our first position (or a random number?)
            # and makes marker visible
            clip_slider.markerPos = 2
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'h' in keys:
                clip_slider.markerPos -= 1
            elif 'j' in keys:
                clip_slider.markerPos += 1

        clip_slider.rating= clip_slider.markerPos
    KeyboardComponent clip_key
      allowedKeys = 'h', 'j'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      store = all keys
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  Routine End_Note
  Routine end_note
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Bedankt voor uw deelname aan het onderzoek. Even geduld, we helpen u uit de scanner.
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    KeyboardComponent key_resp_2
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine tail
    PolygonComponent tail_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.7
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  Routine tail_vignette_break
    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if vignette_trials.thisN == 0 or vignette_trials.thisN == 119 or (vignette_trials.thisN + 1) % 40 != 0:
            continueRoutine = False
    PolygonComponent cross_vignette_trials
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.7
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  Routine tail_smid_break
    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if smid_trials.thisN == 0 or smid_trials.thisN == 119 or (smid_trials.thisN + 1) % 30 != 0:
            continueRoutine = False
    PolygonComponent cross_tail_smid
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.7
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Flow
  Routine vignette_instructions
  Routine tail
  LoopInitiator vignette_trials loopType="TrialHandler"
    Selected rows = $np.random.choice(120,2,replace = False)
    conditionsFile = vig_text_english_dutch.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'number': 0, 'english_vignette': "You see a staff member talking loudly and interrupting the mayor's speech to the public.", 'dutch_vignette': 'U ziet een medewerker luid praten en de toespraak van de burgemeester onderbreken.'},
      {'number': 81, 'english_vignette': 'You see a teenage girl coming home late and ignoring her parents strict curfew.', 'dutch_vignette': 'U ziet een tienermeisje laat thuiskomen en de strikte avondklok van haar ouders negeren.'},
      {'number': 80, 'english_vignette': 'You see a boy turning up the TV as his father talks about his military service.', 'dutch_vignette': 'U ziet een jongen de tv aanzetten terwijl zijn vader vertelt over zijn militaire dienst.'},
      {'number': 79, 'english_vignette': 'You see a boy spray-painting anarchy symbols on the side of the police station.', 'dutch_vignette': 'U ziet een jongen anarchie symbolen verfspuiten aan de zijkant van het politiebureau.'},
      {'number': 77, 'english_vignette': 'You see someone reading the ending of a spy novel before reading the beginning.', 'dutch_vignette': 'U ziet iemand het einde van een spionage boek lezen voordat hij het begin leest.'},
      {'number': 76, 'english_vignette': 'You see a class president saying on TV that her rival college is a better school.', 'dutch_vignette': 'U ziet een klassenvertegenwoordiger op tv zeggen dat haar rivaliserende middelbare school een betere school is.'}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
    Routine vignette_stimulus
    Routine vignette_blank
    Routine vignette_break
    Routine tail_vignette_break
  LoopTerminator vignette_trials
  Routine smid_instructions
  Routine tail
  LoopInitiator smid_trials loopType="TrialHandler"
    Selected rows = $np.random.choice(120,2,replace = False)
    conditionsFile = smid_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_id': 0, 'image_name': 'smid/Neutral_Immoral - high arousal4.jpg', 'moral_domain': 'Neutral', 'valence': 'Immoral', 'arousal': 'high arousal', 'image_number': 4},
      {'image_id': 1, 'image_name': 'smid/Purity-Degradation_Moral - low arousal4.jpg', 'moral_domain': 'Purity-Degradation', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 4},
      {'image_id': 2, 'image_name': 'smid/Loyalty-Betrayal_Moral - low arousal1.jpg', 'moral_domain': 'Loyalty-Betrayal', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 1},
      {'image_id': 3, 'image_name': 'smid/Neutral_Moral - low arousal1.jpg', 'moral_domain': 'Neutral', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 1},
      {'image_id': 4, 'image_name': 'smid/Purity-Degradation_Moral - low arousal5.jpg', 'moral_domain': 'Purity-Degradation', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 5},
      {'image_id': 5, 'image_name': 'smid/Neutral_Immoral - high arousal5.jpg', 'moral_domain': 'Neutral', 'valence': 'Immoral', 'arousal': 'high arousal', 'image_number': 5},
      {'image_id': 6, 'image_name': 'smid/Authority-Subversion_Moral - low arousal5.jpg', 'moral_domain': 'Authority-Subversion', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 5},
      {'image_id': 7, 'image_name': 'smid/Loyalty-Betrayal_Moral - low arousal2.jpg', 'moral_domain': 'Loyalty-Betrayal', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 2}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
    Routine smid_cross
    Routine smid_stimulus
    Routine smid_rating
    Routine smid_break
    Routine tail_smid_break
  LoopTerminator smid_trials
  Routine clip_instructions
  LoopInitiator clip_trials loopType="TrialHandler"
    Selected rows = np.random.choice(3,3) + [0, 3, 6]
    conditionsFile = clips_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'clip_id': '1a', 'clip_name': 'newsclips/1a.mp4', 'topic': 'immigration', 'frame': 'fear'},
      {'clip_id': '1b', 'clip_name': 'newsclips/1b.mp4', 'topic': 'immigration', 'frame': 'blame'},
      {'clip_id': '1c', 'clip_name': 'newsclips/1c.mp4', 'topic': 'immigration', 'frame': 'neutral'},
      {'clip_id': '2a', 'clip_name': 'newsclips/2a.mp4', 'topic': 'climate', 'frame': 'fear'},
      {'clip_id': '2b', 'clip_name': 'newsclips/2b.mp4', 'topic': 'climate', 'frame': 'blame'},
      {'clip_id': '2c', 'clip_name': 'newsclips/2c.mp4', 'topic': 'climate', 'frame': 'neutral'},
      {'clip_id': '3a', 'clip_name': 'newsclips/3a.mp4', 'topic': 'healthcare', 'frame': 'fear'},
      {'clip_id': '3b', 'clip_name': 'newsclips/3b.mp4', 'topic': 'healthcare', 'frame': 'blame'},
      {'clip_id': '3c', 'clip_name': 'newsclips/3c.mp4', 'topic': 'healthcare', 'frame': 'neutral'}]
    Routine tail
    Routine clip_stimulus
    Routine clip_rating
  LoopTerminator clip_trials
  Routine end_note
